PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = test
  keyboardBackend = PsychToolbox
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Routines
  Routine WelcomeScreen
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    TextComponent WelcomeText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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      text:
        Welcome to the Experiment!

        The ASPIRE Group @ OSU
  Routine blank500
    RoutineSettingsComponent blank500
      stopVal [duration (s)] = 0.5
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  Routine UserData
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    FormComponent form
      Data Format = rows
      Font = Open Sans
      Item Padding = 0.05
      Items = /Users/hassan.491/Library/Mobile Documents/com~apple~Numbers/Documents/formItems.csv
      Randomize = False
      Style = light
      Text Height = 0.03
      itemColor = white
      markerColor = red
      responseColor = white
      size = (1, 0.7)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
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    TextComponent text
      letterHeight = 0.05
      pos = (0, -0.45)
      startVal [time (s)] = 0.0
      text = Please press 'Space' when you have filled up the form.
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  Routine Stimuli
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    ButtonComponent button
      bold = True
      borderColor = white
      color = black
      fillColor = white
      forceEndRoutine = False
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      text = Click here to play audio. Please put your attention on Speaker 1.
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      callback:
        import sounddevice
        import threading
        import soundfile

        DATA_TYPE = "int16"

        class myThread(threading.Thread):
            def __init__(self, args):
                threading.Thread.__init__(self)
                self.args=args
            def run(self):
                playmp3(self.args)

        class streamData:
            def __init__(self, index):
                self.outstream = create_running_output_stream(index)

        class musicData:
            def __init__(self, path):
                self.music = load_sound_file_into_memory(path)

        def load_sound_file_into_memory(path):
            audio_data, _ = soundfile.read(path, dtype=DATA_TYPE)
            return audio_data

        def get_device_number_if_usb_soundcard(index_info):
            index, info = index_info
            # if "扬声器" in info["name"] and info["hostapi"]==3:
            #     return index
            return index

        def create_running_output_stream(index):
            output = sounddevice.RawOutputStream(
                device=index,
                dtype=DATA_TYPE,
                samplerate=8000
            )
            return output

        sound_card_indices = list([index_info for index_info in enumerate(sounddevice.query_devices())])

        print(sound_card_indices)

        sound_card_indices = list(filter(lambda x: x is not False,
                                                    map(get_device_number_if_usb_soundcard,
                                                        [index_info for index_info in enumerate(sounddevice.query_devices())])))

        print(sound_card_indices)



        song1 = musicData("/Users/hassan.491/Downloads/sa1.wav")
        song2 = musicData("/Users/hassan.491/Downloads/SA2.WAV.wav")
        stream1 = streamData(sound_card_indices[1])
        stream2 = streamData(sound_card_indices[3])


        def playmp3(args):
            if args==1:
                stream1.outstream.write(song1.music)
            else:
                stream2.outstream.write(song2.music)

        def play1():
            global thread1
            thread1 = myThread(1)
            stream1.outstream.start()
            thread1.start()

        def play2():
            global thread2
            thread2 = myThread(2)
            stream2.outstream.start()
            thread2.start()

        play1()
        play2()
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_2
      letterHeight = 0.05
      pos = (0, -0.4)
      startVal [time (s)] = 10.0
      text = Press 'Space' to continue.
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  Routine QA
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    FormComponent form_2
      Data Format = rows
      Font = Open Sans
      Item Padding = 0.05
      Items = /Users/hassan.491/Library/Mobile Documents/com~apple~Numbers/Documents/formItems 2.csv
      Randomize = False
      Style = light
      Text Height = 0.03
      itemColor = white
      markerColor = red
      responseColor = white
      size = (1, 0.3)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextboxComponent textbox
      bold = False
      editable = False
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      text = Please press 'Space' if you have finished answering.
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  Routine EndScreen
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    TextboxComponent textbox_2
      bold = False
      editable = False
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text = Thank you for participating.
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Flow
  Routine WelcomeScreen
  Routine blank500
  Routine UserData
  Routine blank500
  Routine Stimuli
  Routine blank500
  Routine QA
  Routine blank500
  Routine EndScreen
